PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = FINAL
  Units = use prefs
  Screen = 1
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Routines
  Routine end
    TextComponent text_2
      text = end
      stopVal [duration (s)] = 1
      startVal [time (s)] = 9
      letterHeight = 0.1
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  Routine aud
    SoundComponent sound_1
      sound [set every repeat] = $tone
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_3
      fillColor = $[1,-1,-1]
      stopVal [duration (s)] = 0.5
      lineColor = $[1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.03, 0.04]
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  Routine blockSelect
    CodeComponent code
      Begin Experiment:
        nRepsvis=0
        nRepsaud=0
        nRepsmot=0
        nRepscog=0
        nRepsblank=0
      Begin Routine:
        if trialSelect ==1:
            nRepsvis=1
            nRepsaud=0
            nRepsmot=0
            nRepscog=0
            nRepsblank=0
        if trialSelect ==2:
            nRepsvis=0
            nRepsaud=1
            nRepsmot=0
            nRepscog=0
            nRepsblank=0
        if trialSelect ==3:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=3
            nRepscog=0
            nRepsblank=0
        if trialSelect ==4:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=0
            nRepscog=1
            nRepsblank=0
        if trialSelect ==5:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=0
            nRepscog=0
            nRepsblank=1
        print trialSelect
  Routine into
    TextComponent text
      wrapWidth = 2
      text = The program is ready for the scanner trigger. Press t to proceed manually.
      pos = [0, -0.95]
      startVal [time (s)] = 0.0
      letterHeight = 0.03
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 't'
      startVal [time (s)] = 0.0
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    TextComponent text_3
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        In this task you will see and hear patterns on the screen, and tones in the headphones. Please keep your eyes on the red fixation point.

        When the blue button appears, please press the button as fast as possible.

        When the red fixation point moves, please follow it with your eyes.
  Routine mot
    CodeComponent code_3
      Begin Experiment:
        buttonxpos=0
        buttonypos=0.2
      Begin Routine:
        buttonxpos=0
        buttonypos=0.2
      Each Frame:
        if key_resp_3.keys=="1":
            buttonxpos=-2
            buttonypos=0.2

        # This code here 'hides' the button (shifts it off-screen) when the subject responds.
    ImageComponent image
      stopVal [duration (s)] = 0.9
      pos [set every frame] = [buttonxpos, buttonypos]
      startVal [time (s)] = 0.0
      image = blue_button.png
      size = [0.25, 0.3]
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    PolygonComponent polygon_4
      fillColor = $[1,-1,-1]
      stopVal [duration (s)] = 1.0
      lineColor = $[1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.03, 0.04]
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 1
      forceEndRoutine = False
      allowedKeys = '1'
      startVal [time (s)] = 0.0
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  Routine vis
    CodeComponent code_2
      Begin Routine:
        gratingPhase=0
        frameCounter=0
      End Routine:
        gratingPhase=0
      Each Frame:
        frameCounter=frameCounter+1

        if frameCounter<30:  # Change this number (30) to make the grating switch direction more/less often
            gratingPhase=gratingPhase+0.1 # Change this number (0.1) to speed up or slow down the grating

        if frameCounter>=30: # Change this number (30) to make the grating switch direction more/less of
            gratingPhase=gratingPhase-0.1 # Change this number (0.1) to speed up or slow down the grating

        if frameCounter==60:
            frameCounter=0
    GratingComponent grating
      tex = sin
      stopVal [duration (s)] = 3
      mask = gauss
      phase [set every frame] = gratingPhase
      startVal [time (s)] = 0.0
      sf = 12
      size = [1.3, 1.6]
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    PolygonComponent polygon
      fillColor = $[1,-1,-1]
      stopVal [duration (s)] = 3
      lineColor = $[1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.03, 0.04]
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  Routine cog
    PolygonComponent polygon_5
      fillColor = $[1,-1,-1]
      stopVal [duration (s)] = 0.5
      pos [set every repeat] = [xpos, ypos]
      lineColor = $[1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.03, 0.04]
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  Routine blank
    PolygonComponent polygon_6
      fillColor = $[1,-1,-1]
      stopVal [duration (s)] = 3.0
      lineColor = $[1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.03, 0.04]
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  Routine trialSelection
    CodeComponent code_4
      Begin Experiment:
        nRepsvis=0
        nRepsaud=0
        nRepsmot=0
        nRepscog=0
        nRepsblank=0
      Begin Routine:
        if trialSelect ==1:
            nRepsvis=1
            nRepsaud=0
            nRepsmot=0
            nRepscog=0
            nRepsblank=0
        if trialSelect ==2:
            nRepsvis=0
            nRepsaud=1
            nRepsmot=0
            nRepscog=0
            nRepsblank=0
        if trialSelect ==3:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=3
            nRepscog=0
            nRepsblank=0
        if trialSelect ==4:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=0
            nRepscog=1
            nRepsblank=0
        if trialSelect ==5:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=0
            nRepscog=0
            nRepsblank=1
        print trialSelect
Flow
  Routine into
  LoopInitiator trialSelectLoop loopType="TrialHandler"
    conditionsFile = trial_sequenceB.csv
    random seed = 1
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trialStart': 0, 'trialEnd': 3, 'trialNum': 1, 'trialType': u'visual', 'trialSelect': 1},
      {'trialStart': 3, 'trialEnd': 6, 'trialNum': 2, 'trialType': u'auditory', 'trialSelect': 2},
      {'trialStart': 6, 'trialEnd': 9, 'trialNum': 3, 'trialType': u'motor', 'trialSelect': 3},
      {'trialStart': 9, 'trialEnd': 12, 'trialNum': 4, 'trialType': u'cognitive', 'trialSelect': 4},
      {'trialStart': 12, 'trialEnd': 15, 'trialNum': 5, 'trialType': u'auditory', 'trialSelect': 2},
      {'trialStart': 15, 'trialEnd': 18, 'trialNum': 6, 'trialType': u'cognitive', 'trialSelect': 4},
      {'trialStart': 18, 'trialEnd': 21, 'trialNum': 7, 'trialType': u'cognitive', 'trialSelect': 4},
      {'trialStart': 21, 'trialEnd': 24, 'trialNum': 8, 'trialType': u'visual', 'trialSelect': 1},
      {'trialStart': 24, 'trialEnd': 27, 'trialNum': 9, 'trialType': u'motor', 'trialSelect': 3},
      {'trialStart': 27, 'trialEnd': 30, 'trialNum': 10, 'trialType': u'visual', 'trialSelect': 1},
      {'trialStart': 30, 'trialEnd': 33, 'trialNum': 11, 'trialType': u'cognitive', 'trialSelect': 4},
      {'trialStart': 33, 'trialEnd': 36, 'trialNum': 12, 'trialType': u'blank', 'trialSelect': 5},
      {'trialStart': 36, 'trialEnd': 39, 'trialNum': 13, 'trialType': u'motor', 'trialSelect': 3},
      {'trialStart': 39, 'trialEnd': 42, 'trialNum': 14, 'trialType': u'visual', 'trialSelect': 1},
      {'trialStart': 42, 'trialEnd': 45, 'trialNum': 15, 'trialType': u'auditory', 'trialSelect': 2},
      {'trialStart': 45, 'trialEnd': 48, 'trialNum': 16, 'trialType': u'cognitive', 'trialSelect': 4}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
    Routine trialSelection
    LoopInitiator visLoop loopType="TrialHandler"
      loopType = random
      nReps = nRepsvis
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      Routine vis
    LoopTerminator visLoop
    LoopInitiator audLoop loopType="TrialHandler"
      conditionsFile = tones.csv
      loopType = random
      nReps = nRepsaud
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      conditions:
        [{'tone': u'A'},
        {'tone': u'B'},
        {'tone': u'c'},
        {'tone': u'D'},
        {'tone': u'E'},
        {'tone': u'F'}]
      Routine aud
    LoopTerminator audLoop
    LoopInitiator motLoop loopType="TrialHandler"
      loopType = random
      nReps = nRepsmot
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      Routine mot
    LoopTerminator motLoop
    LoopInitiator cogLoop loopType="TrialHandler"
      conditionsFile = xpos_ypos.csv
      loopType = random
      nReps = nRepscog
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      conditions:
        [{'xpos': 0.7, 'ypos': 0.0},
        {'xpos': 0.5, 'ypos': 0.6},
        {'xpos': 0.5, 'ypos': -0.6},
        {'xpos': -0.7, 'ypos': 0.0},
        {'xpos': -0.5, 'ypos': -0.6},
        {'xpos': -0.5, 'ypos': 0.6}]
      Routine cog
    LoopTerminator cogLoop
    LoopInitiator blankLoop loopType="TrialHandler"
      loopType = random
      nReps = nRepsblank
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      Routine blank
    LoopTerminator blankLoop
  LoopTerminator trialSelectLoop
  Routine end
